PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = mock_study
  keyboardBackend = PsychToolbox
  logging level = data
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      saveStartStop = False
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the user study

        On the following screen, you will see a query image on the left, and will choose from the images on the right which is the same.

        Press 'SPACE' to start
    KeyboardComponent key_Continue
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent csv
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        psychoJS.saveResults = False;
  Routine EndScreen
    RoutineSettingsComponent EndScreen
      saveStartStop = False
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    TextComponent textEndMessage
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing!

        Please wait while we save your results...
    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        try {
            let trials = psychoJS._experiment._trialsData;

            if (!trials || trials.length === 0) {
                console.warn("No trial data to upload.");
                quitPsychoJS();
            } else {
                let filename = psychoJS._experiment._experimentName + "_" + psychoJS._experiment._datetime + ".csv";

                let csv = [Object.keys(trials[0])]
                    .concat(trials.map(row => Object.values(row).join(",")))
                    .join("\n");

                console.log("Saving data to DataPipe...");

                fetch("https://pipe.jspsych.org/api/data", {
                    method: "POST",
                    headers: {
                        "Content-Type": "application/json",
                        Accept: "*/*",
                    },
                    body: JSON.stringify({
                        experimentID: "a2JT7mrQMM51",
                        filename: filename,
                        data: csv,
                    }),
                })
                .then(response => response.json())
                .then(data => {
                    console.log("Upload successful:", data);
                    quitPsychoJS();
                })
                .catch(error => {
                    console.error("Upload failed:", error);
                    quitPsychoJS();
                });
            }
        } catch (e) {
            console.error("Upload routine failed during init:", e);
            quitPsychoJS();
        }
  Routine blank500
    RoutineSettingsComponent blank500
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine trialColor
    RoutineSettingsComponent trialColor
      saveStartStop = False
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    PolygonComponent divider
      fillColor = white
      lineWidth = 2
      pos = (-0.225, 0)
      shape = rectangle
      size = (0.001, 0.8)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = image1, image2, image3, image4, image5
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent imageQuery
      image [set every repeat] = $hotel_query
      pos = (-0.55, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $choice1
      pos = (0.35, -0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $choice2
      pos = (0.1, 0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $choice3
      pos = (0.6, 0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $choice4
      pos = (0.1, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $choice5
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    CodeComponent colorCorrect
      Code Type = Both
      Begin JS Routine:
        trial_start = (new Date()).getTime();
        clicked_img = undefined;
      Begin Routine:
        clicked_img = None
      Each Frame:
        clickable_objects = [image1, image2, image3, image4, image5]

        for obj in clickable_objects:
            if obj.contains(mouse) and mouse.getPressed()[0]:
                clicked_img = obj.image  # This gives the filename like 'images/hotel2_sample4.png'
                thisExp.addData("clicked_image", clicked_img)
                thisExp.addData("correct_answer", correct_answer)
                thisExp.addData("isCorrect", int(clicked_img == correct_answer))
                continueRoutine = False
                break
      Each JS Frame:
        let clickable_objects = [image1, image2, image3, image4, image5];

        for(let obj of clickable_objects) {
            if(obj.contains(mouse) && mouse.getPressed()[0]) {
                clicked_img = obj.image;

                if(typeof clicked_img === "undefined") clicked_img = "undefined";
                if(typeof correct_answer === "undefined") correct_answer = "undefined";

                psychoJS.experiment.addData("clicked_image", clicked_img);
                psychoJS.experiment.addData("correct_answer", correct_answer);
                psychoJS.experiment.addData("isCorrect", clicked_img === correct_answer ? 1 : 0);

                let trial_end = (new Date()).getTime();
                let task_time = (trial_end - trial_start) / 1000
                psychoJS.experiment.addData("task_time_sec", task_time);

                continueRoutine = false;
                break;


            }
        }
    TextComponent queryCaption
      letterHeight = 0.05
      pos = (-0.55, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Query Image
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  Routine NextScreen
    RoutineSettingsComponent NextScreen
      saveStartStop = False
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    TextComponent textNextScreen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Use the Button to change between color and grayscale

        Press 'SPACE' to continue
    KeyboardComponent key_NextScreen
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine confidenceScreen
    RoutineSettingsComponent confidenceScreen
      saveStartStop = False
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    TextComponent text_confidenceQuestion
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident do you feel your selected image was correct?
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = 1, 2, 3, 4, 5
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent buttonAdvance
      bold = True
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (0, -0.45)
      save = none
      saveStartStop = False
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = Submit
      timeRelativeTo = routine
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  Routine trialGray_Color
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  Routine trialColor_Gray
    RoutineSettingsComponent trialColor_Gray
      saveStartStop = False
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    PolygonComponent divider_3
      fillColor = white
      lineWidth = 2
      pos = (-0.225, 0)
      shape = rectangle
      size = (0.001, 0.8)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_2
      clickable = image1, image2, image3, image4, image5,
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent imageQuery_2
      image [set every repeat] = $hotel_query
      pos = (-0.55, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image1_2
      image [set every repeat] = $choice1
      pos = (0.35, -0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image2_2
      image [set every repeat] = $choice2
      pos = (0.1, 0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image3_2
      image [set every repeat] = $choice3
      pos = (0.6, 0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image4_2
      image [set every repeat] = $choice4
      pos = (0.1, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image5_2
      image [set every repeat] = $choice5
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    CodeComponent toggleGray
      Code Type = Both
      Begin JS Routine:
        trial_start = (new Date()).getTime();
        clicked_img = undefined;

        document.querySelector('button').style.borderRadius = '0px';

        color_paths = [choice1, choice2, choice3, choice4, choice5];
        grayscale_paths = [gray1, gray2, gray3, gray4, gray5];
        toggle_button.toggleGray = false;
        image1_2.setImage(color_paths[0]);
        image2_2.setImage(color_paths[1]);
        image3_2.setImage(color_paths[2]);
        image4_2.setImage(color_paths[3]);
        image5_2.setImage(color_paths[4]);
      Begin Routine:
        clicked_img = None


        color_paths = [choice1, choice2, choice3, choice4, choice5]
        grayscale_paths = [gray1, gray2, gray3, gray4, gray5]

        toggle_button.toggleGray = False  # Set the toggle state ON the button object

        image1_2.setImage(color_paths[0])
        image2_2.setImage(color_paths[1])
        image3_2.setImage(color_paths[2])
        image4_2.setImage(color_paths[3])
        image5_2.setImage(color_paths[4])
      Each Frame:
        clickable_objects = [image1_2, image2_2, image3_2, image4_2, image5_2]

        for obj in clickable_objects:
            if obj.contains(mouse) and mouse.getPressed()[0]:
                clicked_img = obj.image  # This gives the filename like 'images/hotel2_sample4.png'
                thisExp.addData("clicked_image", clicked_img)
                thisExp.addData("correct_answer", correct_answer)
                thisExp.addData("isCorrect", int(clicked_img == correct_answer))
                continueRoutine = False
                break
      Each JS Frame:
        let clickable_objects = [image1, image2, image3, image4, image5];

        for(let obj of clickable_objects) {
            if(obj.contains(mouse) && mouse.getPressed()[0]) {
                clicked_img = obj.image;

                if(typeof clicked_img === "undefined") clicked_img = "undefined";
                if(typeof correct_answer === "undefined") correct_answer = "undefined";

                psychoJS.experiment.addData("clicked_image", clicked_img);
                psychoJS.experiment.addData("correct_answer", correct_answer);
                psychoJS.experiment.addData("isCorrect", clicked_img === correct_answer ? 1 : 0);

                let trial_end = (new Date()).getTime();
                let task_time = (trial_end - trial_start) / 1000
                psychoJS.experiment.addData("task_time_sec", task_time);

                continueRoutine = false;
                break;


            }
        }
    ButtonComponent toggle_button
      bold = True
      borderColor = 0.0000, 0.0000, 0.0000
      fillColor = 0.5, 0.5, 0.5
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (-0.55, -0.25)
      saveStartStop = False
      size = (0.45, 0.125)
      startVal [time (s)] = 0
      text = Toggle Color/Grayscale
      timeRelativeTo = routine
      units = height
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      callback:
        toggle_button.toggleGray = not toggle_button.toggleGray

        if toggle_button.toggleGray:
            image1_2.setImage(grayscale_paths[0])
            image2_2.setImage(grayscale_paths[1])
            image3_2.setImage(grayscale_paths[2])
            image4_2.setImage(grayscale_paths[3])
            image5_2.setImage(grayscale_paths[4])

             # Change button background color to darker to indicate grayscale
            toggle_button.color = [0.5, 0.5, 0.5]  # RGB in 0–1 range (gray)

        else:
            image1_2.setImage(color_paths[0])
            image2_2.setImage(color_paths[1])
            image3_2.setImage(color_paths[2])
            image4_2.setImage(color_paths[3])
            image5_2.setImage(color_paths[4])

           # Change button background back to lighter
            toggle_button.color = [0.8, 0.8, 0.8]  # light gray
    TextComponent queryCaption_GC
      letterHeight = 0.05
      pos = (-0.55, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Query Image
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  Routine trialGrayscale
    RoutineSettingsComponent trialGrayscale
      saveStartStop = False
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    PolygonComponent divider_2
      fillColor = white
      lineWidth = 2
      pos = (-0.225, 0)
      shape = rectangle
      size = (0.001, 0.8)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_3
      clickable = image1, image2, image3, image4, image5
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    ImageComponent queryImage_2
      image [set every repeat] = $hotel_query
      pos = (-0.55, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image1_3
      image [set every repeat] = $gray1
      pos = (0.35, -0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image2_3
      image [set every repeat] = $gray2
      pos = (0.1, 0.25)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image3_3
      image [set every repeat] = $gray3
      pos = (0.6, 0.25)
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image4_3
      image [set every repeat] = $gray4
      pos = (0.1, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    ImageComponent image5_3
      image [set every repeat] = $gray5
      pos = (0.6, 0)
      saveStartStop = False
      size = (0.4984, 0.28)
      startVal [time (s)] = 0.0
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    CodeComponent grayCorrect
      Code Type = Both
      Begin Experiment:
        clicked_img = None
      Begin JS Experiment:
        trial_start = (new Date()).getTime();
        clicked_img = undefined;
      Each Frame:
        clickable_objects = [image1_3, image2_3, image3_3, image4_3, image5_3]

        for obj in clickable_objects:
            if obj.contains(mouse) and mouse.getPressed()[0]:
                clicked_img = obj.image  # This gives the filename like 'images/hotel2_sample4.png'
                thisExp.addData("clicked_image", clicked_img)
                thisExp.addData("correct_answer", correct_answer)
                thisExp.addData("isCorrect", int(clicked_img == correct_answer))
                continueRoutine = False
                break
      Each JS Frame:
        let clickable_objects = [image1, image2, image3, image4, image5];

        for(let obj of clickable_objects) {
            if(obj.contains(mouse) && mouse.getPressed()[0]) {
                clicked_img = obj.image;

                if(typeof clicked_img === "undefined") clicked_img = "undefined";
                if(typeof correct_answer === "undefined") correct_answer = "undefined";

                psychoJS.experiment.addData("clicked_image", clicked_img);
                psychoJS.experiment.addData("correct_answer", correct_answer);
                psychoJS.experiment.addData("isCorrect", clicked_img === correct_answer ? 1 : 0);

                let trial_end = (new Date()).getTime();
                let task_time = (trial_end - trial_start) / 1000
                psychoJS.experiment.addData("task_time_sec", task_time);

                continueRoutine = false;
                break;


            }
        }
    TextComponent queryCaption_gray
      letterHeight = 0.05
      pos = (-0.55, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Query Image
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Flow
  Routine WelcomeScreen
  LoopInitiator trialsColor loopType="TrialHandler"
    conditionsFile = resources/hotel_color.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('hotel_query', 'resources/images/hotel1_query.jpg'), ('choice1', 'resources/images/hotel1_sample1.jpg'), ('choice2', 'resources/images/hotel1_sample2.jpeg'), ('choice3', 'resources/images/hotel1_sample3.jpg'), ('choice4', 'resources/images/hotel1_correct.jpg'), ('choice5', 'resources/images/hotel1_sample4.jpg'), ('correct_answer', 'resources/images/hotel1_correct.jpg'), ('gray1', 'resources/images/hotel1_gray1.jpg'), ('gray2', 'resources/images/hotel1_gray2.jpeg'), ('gray3', 'resources/images/hotel1_gray3.jpg'), ('gray4', 'resources/images/hotel1_correctGray.jpg'), ('gray5', 're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,
      OrderedDict([('hotel_query', 'resources/images/hotel2_query.jpg'), ('choice1', 'resources/images/hotel2_sample1.JPEG'), ('choice2', 'resources/images/hotel2_correct.jpg'), ('choice3', 'resources/images/hotel2_sample2.jpg'), ('choice4', 'resources/images/hotel2_sample3.jpg'), ('choice5', 'resources/images/hotel2_sample4.jpeg'), ('correct_answer', 'resources/images/hotel2_correct.jpg'), ('gray1', 'resources/images/hotel2_gray1.JPEG'), ('gray2', 'resources/images/hotel2_correctGray.jpg'), ('gray3', 'resources/images/hotel2_gray2.jpg'), ('gray4', 'resources/images/hotel2_gray3.jpg'), ('gray5', 're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,
      OrderedDict([('hotel_query', 'resources/images/hotel3_query.jpg'), ('choice1', 'resources/images/hotel3_correct.jpg'), ('choice2', 'resources/images/hotel3_sample1.jpg'), ('choice3', 'resources/images/hotel3_sample2.jpeg'), ('choice4', 'resources/images/hotel3_sample3.jpg'), ('choice5', 'resources/images/hotel3_sample4.jpg'), ('correct_answer', 'resources/images/hotel3_correct.jpg'), ('gray1', 'resources/images/hotel3_correctGray.jpg'), ('gray2', 'resources/images/hotel3_gray1.jpg'), ('gray3', 'resources/images/hotel3_gray2.jpeg'), ('gray4', 'resources/images/hotel3_gray3.jpg'), ('gray5', 'res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,
      OrderedDict([('hotel_query', 'resources/images/hotel4_query.jpg'), ('choice1', 'resources/images/hotel4_sample1.jpg'), ('choice2', 'resources/images/hotel4_sample2.jpg'), ('choice3', 'resources/images/hotel4_sample3.jpg'), ('choice4', 'resources/images/hotel4_sample4.jpg'), ('choice5', 'resources/images/hotel4_correct.jpg'), ('correct_answer', 'resources/images/hotel4_correct.jpg'), ('gray1', 'resources/images/hotel4_gray1.jpg'), ('gray2', 'resources/images/hotel4_gray2.jpg'), ('gray3', 'resources/images/hotel4_gray3.jpg'), ('gray4', 'resources/images/hotel4_gray4.jpg'), ('gray5', 'resources/i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
    Routine trialColor
    Routine blank500
  LoopTerminator trialsColor
  Routine confidenceScreen
  LoopInitiator trialsGray loopType="TrialHandler"
    conditionsFile = resources/hotel_color.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine trialGrayscale
    Routine blank500
  LoopTerminator trialsGray
  Routine confidenceScreen
  Routine NextScreen
  LoopInitiator trialsGray_Color loopType="TrialHandler"
    conditionsFile = resources/hotel_color.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine trialColor_Gray
    Routine blank500
  LoopTerminator trialsGray_Color
  Routine confidenceScreen
  Routine EndScreen
